PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1536, 864]
  expName = M_SH_Project_2
  keyboardBackend = ioHub
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Routines
  Routine Introduction
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import random
    ImageComponent introduction
      image = intro.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    CodeComponent code_3
      Code Type = Auto->JS
    PolygonComponent B
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      units = norm
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  Routine Video
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if movie.status == visual.FINISHED:
            continueRoutine = False
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $vc
      size = [2,2]
      startVal [time (s)] = 0.0
      units = norm
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  Routine Cogn_E
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    ImageComponent ce
      image = cogn_i.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cogn5
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    ImageComponent image_c1
      image = cogn5.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider_c1
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c2
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, 0.11)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c3
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.13)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c4
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.37)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c5
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.61)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cogn3
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    ImageComponent image_c2
      image = cogn3.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider_c6
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, 0.34)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c7
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, -0.12)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_c8
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, -0.60)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Aff_E
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    ImageComponent ae
      image = aff_i.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    ImageComponent image_6
      image = end.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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  Routine ITI
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    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine Aff5
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    ImageComponent image_a1
      image = aff5.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider_a1
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, 0.35)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a2
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, 0.11)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a3
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.13)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a4
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.37)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a5
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (-0.2, -0.61)
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Aff3
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    ImageComponent image_a2
      image = aff3.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent slider_a6
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, 0.34)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a7
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, -0.12)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    SliderComponent slider_a8
      forceEndRoutine = False
      granularity = 1
      labels = 1,2,3,4,5,6,7,8,9
      letterHeight = 0.05
      pos = (0.02, -0.60)
      size = (1.1, 0.05)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = video_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('vc', 'videos\\v1.mp4')]),
      OrderedDict([('vc', 'videos\\v2.mp4')]),
      OrderedDict([('vc', 'videos\\v3.mp4')]),
      OrderedDict([('vc', 'videos\\v4.mp4')]),
      OrderedDict([('vc', 'videos\\v5.mp4')]),
      OrderedDict([('vc', 'videos\\v6.mp4')]),
      OrderedDict([('vc', 'videos\\v7.mp4')]),
      OrderedDict([('vc', 'videos\\v8.mp4')]),
      OrderedDict([('vc', 'videos\\v9.mp4')]),
      OrderedDict([('vc', 'videos\\v10.mp4')])]
    Routine ITI
    Routine Video
    Routine Blank
    Routine Cogn_E
    Routine Cogn5
    Routine Cogn3
    Routine Aff_E
    Routine Aff5
    Routine Aff3
  LoopTerminator trials
  Routine End
